<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:bv="clr-namespace:BonVision;assembly=BonVision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-180</Left>
        <Right>180</Right>
        <Bottom>-90</Bottom>
        <Top>90</Top>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
        <FaceSize xsi:nil="true" />
        <ClearColor>Gray</ClearColor>
        <Width xsi:nil="true" />
        <Height xsi:nil="true" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
        <Width>20</Width>
        <Height>15</Height>
        <Rotation>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>0</X>
          <Y>0</Y>
          <Z>-10</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.GammaCorrection.bonsai">
          <ClearColor>Gray</ClearColor>
          <GammaLut xsi:nil="true" />
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SelectedImages</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Random</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:Permutation" />
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Random</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Lower" />
              <Property Name="Upper" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateDiscreteUniform">
                <p1:Lower>3</p1:Lower>
                <p1:Upper>5</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Presentations</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Flash Sequence</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0.25S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Sink">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>Image</gl:ShaderName>
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>DrawImage</Name>
                    <Description>Draws an affine transformed 2D image.</Description>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedProperty">
                          <MemberName>Value</MemberName>
                          <Name>Angle</Name>
                          <Description>The angle of the image.</Description>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="bv:AngleProperty">
                            <bv:Value>0</bv:Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Angle" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="ExtentX" />
                          <Property Name="ExtentY" />
                          <Property Name="LocationX" />
                          <Property Name="LocationY" />
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Transform</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="X" DisplayName="LocationX" />
                                <Property Name="Y" DisplayName="LocationY" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:Translate">
                                  <gl:Order>Prepend</gl:Order>
                                  <gl:X>0</gl:X>
                                  <gl:Y>0</gl:Y>
                                  <gl:Z>0</gl:Z>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="X" DisplayName="ExtentX" />
                                <Property Name="Y" DisplayName="ExtentY" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:Scale">
                                  <gl:Order>Append</gl:Order>
                                  <gl:X>90</gl:X>
                                  <gl:Y>90</gl:Y>
                                  <gl:Z>1</gl:Z>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Angle" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:RotateZ">
                                  <gl:Order>Prepend</gl:Order>
                                  <gl:Angle>0</gl:Angle>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:UpdateUniform">
                                  <gl:UniformName>transform</gl:UniformName>
                                  <gl:ShaderName>Image</gl:ShaderName>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="2" Label="Source1" />
                              <Edge From="1" To="2" Label="Source2" />
                              <Edge From="2" To="4" Label="Source1" />
                              <Edge From="3" To="4" Label="Source2" />
                              <Edge From="4" To="6" Label="Source1" />
                              <Edge From="5" To="6" Label="Source2" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="ShiftX" />
                          <Property Name="ShiftY" />
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Shift</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="X" DisplayName="ShiftX" />
                                <Property Name="Y" DisplayName="ShiftY" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:CreateScale">
                                  <gl:X>0</gl:X>
                                  <gl:Y>0</gl:Y>
                                  <gl:Z>1</gl:Z>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>M11,M22</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:UpdateUniform">
                                  <gl:UniformName>shift</gl:UniformName>
                                  <gl:ShaderName>Image</gl:ShaderName>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="2" Label="Source1" />
                              <Edge From="1" To="2" Label="Source2" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:DrawMesh">
                            <gl:ShaderName>Image</gl:ShaderName>
                            <gl:MeshName>Quad</gl:MeshName>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="5" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="5" Label="Source3" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="7" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT0.5S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Repeat" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ElementIndex" />
                  </Expression>
                  <Expression xsi:type="TakeWhile">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Index</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Presentations</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="LessThan" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="5" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Presentations</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Lick</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Throttle">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="MulticastSubject">
              <Name>Presentations</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="7" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="14" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Change Flash</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Random</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:EnumerateFiles">
          <io:Path>stimuli\images</io:Path>
          <io:SearchPattern>*.tiff</io:SearchPattern>
          <io:SearchOption>TopDirectoryOnly</io:SearchOption>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:Variation">
          <num:Count>8</num:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>LoadImages</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:LoadImage">
                <gl:Width xsi:nil="true" />
                <gl:Height xsi:nil="true" />
                <gl:InternalFormat>Rgba</gl:InternalFormat>
                <gl:WrapS>Repeat</gl:WrapS>
                <gl:WrapT>Repeat</gl:WrapT>
                <gl:MinFilter>Linear</gl:MinFilter>
                <gl:MagFilter>Linear</gl:MagFilter>
                <gl:FileName>stimuli\images\16052.tiff</gl:FileName>
                <gl:ColorType>Unchanged</gl:ColorType>
                <gl:FlipMode>Vertical</gl:FlipMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>SelectedImages</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Change Flash</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>None</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalInput">
          <ard:PortName>COM3</ard:PortName>
          <ard:Pin>2</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Lick</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TimedGate">
          <rx:TimeSpan>PT1S</rx:TimeSpan>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Throttle">
          <rx:DueTime>PT0S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Reward Delivery</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:DigitalOutput">
          <mx:Channels>
            <mx:DigitalOutputChannelConfiguration>
              <mx:ChannelName>DigitalOut</mx:ChannelName>
              <mx:Grouping>OneChannelForEachLine</mx:Grouping>
              <mx:Lines> Dev1/port1/line5</mx:Lines>
            </mx:DigitalOutputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.02S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:DigitalOutput">
          <mx:Channels>
            <mx:DigitalOutputChannelConfiguration>
              <mx:ChannelName>DigitalOut</mx:ChannelName>
              <mx:Grouping>OneChannelForEachLine</mx:Grouping>
              <mx:Lines>Dev1/port1/line5</mx:Lines>
            </mx:DigitalOutputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:DigitalOutput">
          <mx:Channels>
            <mx:DigitalOutputChannelConfiguration>
              <mx:ChannelName>DigitalOut</mx:ChannelName>
              <mx:Grouping>OneChannelForEachLine</mx:Grouping>
              <mx:Lines> Dev0/port0/line7</mx:Lines>
            </mx:DigitalOutputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.02S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:DigitalOutput">
          <mx:Channels>
            <mx:DigitalOutputChannelConfiguration>
              <mx:ChannelName>DigitalOut</mx:ChannelName>
              <mx:Grouping>OneChannelForEachLine</mx:Grouping>
              <mx:Lines> Dev0/port0/line7</mx:Lines>
            </mx:DigitalOutputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:DigitalOutput">
          <mx:Channels>
            <mx:DigitalOutputChannelConfiguration>
              <mx:ChannelName>DigitalOutput</mx:ChannelName>
              <mx:Grouping>OneChannelForEachLine</mx:Grouping>
              <mx:Lines>Dev1/port0/line1</mx:Lines>
            </mx:DigitalOutputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:DigitalOutput">
          <mx:Channels>
            <mx:DigitalOutputChannelConfiguration>
              <mx:ChannelName>DigitalOut</mx:ChannelName>
              <mx:Grouping>OneChannelForEachLine</mx:Grouping>
              <mx:Lines>Dev1/port0/line1</mx:Lines>
            </mx:DigitalOutputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:DigitalOutput">
          <mx:Channels>
            <mx:DigitalOutputChannelConfiguration>
              <mx:ChannelName>DigitalOut</mx:ChannelName>
              <mx:Grouping>OneChannelForEachLine</mx:Grouping>
              <mx:Lines>Dev1/port2/line1</mx:Lines>
            </mx:DigitalOutputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Random</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Index</Selector>
      </Expression>
      <Expression xsi:type="Mod">
        <Operand xsi:type="IntProperty">
          <Value>60</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Divide">
        <Operand xsi:type="IntProperty">
          <Value>30</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ColorR" />
          <Property Name="ColorG" />
          <Property Name="ColorB" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
        <ExtentX>10</ExtentX>
        <ExtentY>10</ExtentY>
        <LocationX>45</LocationX>
        <LocationY>27</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
        <ColorR>1</ColorR>
        <ColorG>1</ColorG>
        <ColorB>1</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:DigitalOutput">
          <mx:Channels>
            <mx:DigitalOutputChannelConfiguration>
              <mx:ChannelName>DigitalOut</mx:ChannelName>
              <mx:Grouping>OneChannelForEachLine</mx:Grouping>
              <mx:Lines>Dev1/port1/line7</mx:Lines>
            </mx:DigitalOutputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Mod">
        <Operand xsi:type="IntProperty">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:DigitalOutput">
          <mx:Channels>
            <mx:DigitalOutputChannelConfiguration>
              <mx:ChannelName>DigitalOut</mx:ChannelName>
              <mx:Grouping>OneChannelForEachLine</mx:Grouping>
              <mx:Lines>Dev1/port1/line4</mx:Lines>
            </mx:DigitalOutputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:AnalogInput">
          <mx:SignalSource />
          <mx:SampleRate>120</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>1000</mx:BufferSize>
          <mx:SamplesPerRead>120</mx:SamplesPerRead>
          <mx:Channels>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName />
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev0/ai2</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Rse</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>analog_enc.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>Data,ElementType</io:Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:CameraCapture">
            <cv:Index>0</cv:Index>
            <cv:CaptureProperties />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:VideoWriter">
            <cv:FileName>C:\ProgramData\bonsai_workflows\Analysis\Detection_of_change_with_camera\camera_data.avi</cv:FileName>
            <cv:Suffix>None</cv:Suffix>
            <cv:Buffered>true</cv:Buffered>
            <cv:Overwrite>true</cv:Overwrite>
            <cv:FourCC>FMP4</cv:FourCC>
            <cv:FrameRate>30</cv:FrameRate>
            <cv:FrameSize>
              <cv:Width>0</cv:Width>
              <cv:Height>0</cv:Height>
            </cv:FrameSize>
            <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
          </Combinator>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="20" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="31" Label="Source2" />
      <Edge From="24" To="43" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="29" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="27" To="48" Label="Source1" />
      <Edge From="28" To="29" Label="Source2" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="34" To="39" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="51" To="58" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="54" To="61" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="56" To="59" Label="Source1" />
      <Edge From="57" To="58" Label="Source2" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="64" To="65" Label="Source1" />
      <Edge From="66" To="67" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>