<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:bv="clr-namespace:BonVision;assembly=BonVision"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>Random</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:EnumerateFiles">
          <io:Path>stimuli\images</io:Path>
          <io:SearchPattern>*.tiff</io:SearchPattern>
          <io:SearchOption>TopDirectoryOnly</io:SearchOption>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:Variation">
          <num:Count>8</num:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>LoadImages</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:LoadImage">
                <gl:Width xsi:nil="true" />
                <gl:Height xsi:nil="true" />
                <gl:InternalFormat>Rgba</gl:InternalFormat>
                <gl:WrapS>Repeat</gl:WrapS>
                <gl:WrapT>Repeat</gl:WrapT>
                <gl:MinFilter>Linear</gl:MinFilter>
                <gl:MagFilter>Linear</gl:MagFilter>
                <gl:FileName>stimuli\images\2092.tiff</gl:FileName>
                <gl:ColorType>Unchanged</gl:ColorType>
                <gl:FlipMode>Vertical</gl:FlipMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>SelectedImages</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Change Flash</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.15S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Lick</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TimedGate">
          <rx:TimeSpan>PT0.6S</rx:TimeSpan>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Throttle">
          <rx:DueTime>PT0.6S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Reward</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>Reward</Format>
        <Selector xsi:nil="true" />
        <Name>Allen.Log</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="..\MPE_workflows\Allen.OutputReward.bonsai">
        <Water_x0020_Volume_x0020__x0028_mL_x0029_>0</Water_x0020_Volume_x0020__x0028_mL_x0029_>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="..\MPE_workflows\Allen.OutputSync2.bonsai" />
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="..\MPE_workflows\Allen.OutputSync3.bonsai" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Random</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="..\MPE_workflows\Allen.InitView.bonsai" />
      <Expression xsi:type="PublishSubject">
        <Name>View</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>View</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="..\MPE_workflows\Allen.DrawPhotodiode.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="..\MPE_workflows\Allen.OutputLocation.bonsai" />
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.FrameEventLogger.bonsai">
        <Name>Allen.Log</Name>
        <Append>false</Append>
        <Overwrite>true</Overwrite>
        <Suffix>None</Suffix>
        <FileName>c:\programdata\AIBS_MPE\bonsai_workflows\data\202256134545_bonsai_event_log.csv</FileName>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>Frame</Format>
        <Selector xsi:nil="true" />
        <Name>Allen.Log</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT5S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="..\MPE_workflows\Allen.End.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>EndFrame</Format>
        <Selector xsi:nil="true" />
        <Name>Allen.Log</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="IncludeWorkflow" Path="..\MPE_workflows\Allen.InitLick.bonsai" />
      <Expression xsi:type="BehaviorSubject">
        <Name>Lick</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>Lick</Format>
        <Selector xsi:nil="true" />
        <Name>Allen.Log</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="..\MPE_workflows\Allen.OutputSync1.bonsai" />
      <Expression xsi:type="SubscribeSubject">
        <Name>SelectedImages</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Random</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:Permutation" />
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>StartFlash - {0}</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Format" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
              <Format>StartFlash - stimuli\images\28083.tiff</Format>
              <Selector xsi:nil="true" />
              <Name>Allen.Log</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>View</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Flash Sequence</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Flash</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Timer">
                            <gl:DueTime>PT0.25S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>PositionImage</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="ExternalizedProperty">
                                <MemberName>Value</MemberName>
                                <Name>Angle</Name>
                                <Description>The angle of the image.</Description>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="bv:AngleProperty">
                                  <bv:Value>0</bv:Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Angle" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="ExtentX" />
                                <Property Name="ExtentY" />
                                <Property Name="LocationX" />
                                <Property Name="LocationY" />
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="ShiftX" />
                                <Property Name="ShiftY" />
                              </Expression>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Sink">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Item2</Selector>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:BindTexture">
                                        <gl:TextureSlot>Texture0</gl:TextureSlot>
                                        <gl:ShaderName>Image</gl:ShaderName>
                                        <gl:TextureTarget>Texture2D</gl:TextureTarget>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1</Selector>
                              </Expression>
                              <Expression xsi:type="GroupWorkflow">
                                <Name>Transform</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="X" DisplayName="LocationX" />
                                      <Property Name="Y" DisplayName="LocationY" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:Translate">
                                        <gl:Order>Prepend</gl:Order>
                                        <gl:X>0</gl:X>
                                        <gl:Y>0</gl:Y>
                                        <gl:Z>0</gl:Z>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="X" DisplayName="ExtentX" />
                                      <Property Name="Y" DisplayName="ExtentY" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:Scale">
                                        <gl:Order>Prepend</gl:Order>
                                        <gl:X>120</gl:X>
                                        <gl:Y>95</gl:Y>
                                        <gl:Z>1</gl:Z>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="Angle" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:RotateZ">
                                        <gl:Order>Prepend</gl:Order>
                                        <gl:Angle>0</gl:Angle>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:UpdateUniform">
                                        <gl:UniformName>transform</gl:UniformName>
                                        <gl:ShaderName>Image</gl:ShaderName>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="2" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source2" />
                                    <Edge From="2" To="4" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source2" />
                                    <Edge From="4" To="6" Label="Source1" />
                                    <Edge From="5" To="6" Label="Source2" />
                                    <Edge From="6" To="7" Label="Source1" />
                                    <Edge From="7" To="8" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="GroupWorkflow">
                                <Name>Shift</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="X" DisplayName="ShiftX" />
                                      <Property Name="Y" DisplayName="ShiftY" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:CreateScale">
                                        <gl:X>0</gl:X>
                                        <gl:Y>0</gl:Y>
                                        <gl:Z>1</gl:Z>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>M11,M22</Selector>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:UpdateUniform">
                                        <gl:UniformName>shift</gl:UniformName>
                                        <gl:ShaderName>Image</gl:ShaderName>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="2" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source2" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                    <Edge From="4" To="5" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="8" Label="Source3" />
                              <Edge From="3" To="8" Label="Source2" />
                              <Edge From="4" To="9" Label="Source2" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Omission</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>true</Value>
                                </Combinator>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>DrawOmission</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>false</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Omission</Name>
                              </Expression>
                              <Expression xsi:type="BitwiseNot" />
                              <Expression xsi:type="WorkflowOutput" />
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>false</Value>
                                </Combinator>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>DrawFlash</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:DrawMesh">
                                  <gl:ShaderName>Image</gl:ShaderName>
                                  <gl:MeshName>Quad</gl:MeshName>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>true</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Last" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="GroupWorkflow">
                          <Name>InitOmission</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Random</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p1:CreateContinuousUniform">
                                  <p1:Lower>0</p1:Lower>
                                  <p1:Upper>1</p1:Upper>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p1:Sample" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="FloatProperty">
                                  <Value>0.05</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="LessThanOrEqual" />
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="4" Label="Source1" />
                              <Edge From="3" To="4" Label="Source2" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="ReplaySubject">
                          <Name>Omission</Name>
                          <BufferSize xsi:nil="true" />
                        </Expression>
                        <Expression xsi:type="Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
                          <Format>Omission</Format>
                          <Selector xsi:nil="true" />
                          <Name>Allen.Log</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="8" Label="Source2" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="2" To="5" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="7" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
                    <Format>EndFlash</Format>
                    <Selector xsi:nil="true" />
                    <Name>Allen.Log</Name>
                  </Expression>
                  <Expression xsi:type="NestedWorkflow">
                    <Name>Gray period</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.5S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Repeat" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ElementIndex" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Index</Selector>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>FlashCount</Name>
                  </Expression>
                  <Expression xsi:type="TakeWhile">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TotalPresentations</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="LessThan" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source2" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Lick</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>CountAborts</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Aborts</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT4.5S</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT0.3S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SkipUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="6" Label="Source2" />
                  <Edge From="1" To="4" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Aborts</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Aborts</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>CheckNonZero</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="GreaterThan" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Condition">
              <Name>ResetGoal+Count</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ResetGoal</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SetPresentationGoal</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>PresentationGoal</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Aborts</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
              <Format>Abort-Reset</Format>
              <Selector xsi:nil="true" />
              <Name>Allen.Log</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>ResetCount</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="LessThan" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
              <Format>Abort</Format>
              <Selector xsi:nil="true" />
              <Name>Allen.Log</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ResetCount</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>FlashCount</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PresentationGoal</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>TotalPresentations</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source2" />
                  <Edge From="1" To="5" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>InitTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Random</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Lower" />
                    <Property Name="Upper" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateDiscreteUniform">
                      <p1:Lower>10</p1:Lower>
                      <p1:Upper>15</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="ReplaySubject">
                    <Name>SetPresentationGoal</Name>
                    <BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>TotalPresentations</Name>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>PresentationGoal</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>Aborts</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="7" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="16" To="21" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="24" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>ChangeFlash</Format>
        <Selector xsi:nil="true" />
        <Name>Allen.Log</Name>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Change Flash</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="..\MPE_workflows\Allen.ReadWheel.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>Wheel-{0}</Format>
        <Selector>Item2.count</Selector>
        <Name>Allen.Log</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source2" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="15" Label="Source1" />
      <Edge From="7" To="9" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="12" To="14" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="25" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="30" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source2" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="36" To="38" Label="Source1" />
      <Edge From="37" To="38" Label="Source2" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="44" To="46" Label="Source2" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>