<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:bv="clr-namespace:BonVision;assembly=BonVision"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-180</Left>
        <Right>180</Right>
        <Bottom>-90</Bottom>
        <Top>90</Top>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
        <FaceSize xsi:nil="true" />
        <ClearColor>Gray</ClearColor>
        <Width xsi:nil="true" />
        <Height xsi:nil="true" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
        <Width>20</Width>
        <Height>15</Height>
        <Rotation>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>0</X>
          <Y>0</Y>
          <Z>-10</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.GammaCorrection.bonsai">
          <ClearColor>Gray</ClearColor>
          <GammaLut xsi:nil="true" />
        </Builder>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:EnumerateFiles">
          <io:Path>stimuli\images - Go</io:Path>
          <io:SearchPattern>*.tiff</io:SearchPattern>
          <io:SearchOption>TopDirectoryOnly</io:SearchOption>
        </Combinator>
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>LoadImages</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:LoadImage">
                <gl:Width xsi:nil="true" />
                <gl:Height xsi:nil="true" />
                <gl:InternalFormat>Rgba</gl:InternalFormat>
                <gl:WrapS>Repeat</gl:WrapS>
                <gl:WrapT>Repeat</gl:WrapT>
                <gl:MinFilter>Linear</gl:MinFilter>
                <gl:MagFilter>Linear</gl:MagFilter>
                <gl:FileName>stimuli\images - Go\go.tiff</gl:FileName>
                <gl:ColorType>Unchanged</gl:ColorType>
                <gl:FlipMode>Vertical</gl:FlipMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>GoImages</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:EnumerateFiles">
          <io:Path>stimuli\images - NoGo</io:Path>
          <io:SearchPattern>*.tiff</io:SearchPattern>
          <io:SearchOption>TopDirectoryOnly</io:SearchOption>
        </Combinator>
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>LoadImages</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:LoadImage">
                <gl:Width xsi:nil="true" />
                <gl:Height xsi:nil="true" />
                <gl:InternalFormat>Rgba</gl:InternalFormat>
                <gl:WrapS>Repeat</gl:WrapS>
                <gl:WrapT>Repeat</gl:WrapT>
                <gl:MinFilter>Linear</gl:MinFilter>
                <gl:MagFilter>Linear</gl:MagFilter>
                <gl:FileName>stimuli\images - NoGo\no_go.tiff</gl:FileName>
                <gl:ColorType>Unchanged</gl:ColorType>
                <gl:FlipMode>Vertical</gl:FlipMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>NoGoImages</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT2S</gl:DueTime>
          <gl:Period>PT3S</gl:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>Trial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Random</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateDiscreteUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>0.5</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>GoTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT2S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoImages</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Sink">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>Image</gl:ShaderName>
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>DrawImage</Name>
                    <Description>Draws an affine transformed 2D image.</Description>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedProperty">
                          <MemberName>Value</MemberName>
                          <Name>Angle</Name>
                          <Description>The angle of the image.</Description>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="bv:AngleProperty">
                            <bv:Value>0</bv:Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Angle" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="ExtentX" />
                          <Property Name="ExtentY" />
                          <Property Name="LocationX" />
                          <Property Name="LocationY" />
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Transform</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="X" DisplayName="LocationX" />
                                <Property Name="Y" DisplayName="LocationY" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:Translate">
                                  <gl:Order>Prepend</gl:Order>
                                  <gl:X>0</gl:X>
                                  <gl:Y>0</gl:Y>
                                  <gl:Z>0</gl:Z>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="X" DisplayName="ExtentX" />
                                <Property Name="Y" DisplayName="ExtentY" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:Scale">
                                  <gl:Order>Prepend</gl:Order>
                                  <gl:X>45</gl:X>
                                  <gl:Y>45</gl:Y>
                                  <gl:Z>1</gl:Z>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Angle" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:RotateZ">
                                  <gl:Order>Prepend</gl:Order>
                                  <gl:Angle>0</gl:Angle>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:UpdateUniform">
                                  <gl:UniformName>transform</gl:UniformName>
                                  <gl:ShaderName>Image</gl:ShaderName>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="2" Label="Source1" />
                              <Edge From="1" To="2" Label="Source2" />
                              <Edge From="2" To="4" Label="Source1" />
                              <Edge From="3" To="4" Label="Source2" />
                              <Edge From="4" To="6" Label="Source1" />
                              <Edge From="5" To="6" Label="Source2" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="ShiftX" />
                          <Property Name="ShiftY" />
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Shift</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="X" DisplayName="ShiftX" />
                                <Property Name="Y" DisplayName="ShiftY" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:CreateScale">
                                  <gl:X>0</gl:X>
                                  <gl:Y>0</gl:Y>
                                  <gl:Z>1</gl:Z>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>M11,M22</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:UpdateUniform">
                                  <gl:UniformName>shift</gl:UniformName>
                                  <gl:ShaderName>Image</gl:ShaderName>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="2" Label="Source1" />
                              <Edge From="1" To="2" Label="Source2" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:DrawMesh">
                            <gl:ShaderName>Image</gl:ShaderName>
                            <gl:MeshName>Quad</gl:MeshName>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="5" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="5" Label="Source3" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="7" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>GO</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Lick</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TimedGate">
                      <rx:TimeSpan>PT0.1S</rx:TimeSpan>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Amb" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>WaterReward</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="8" Label="Source2" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="20" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="18" Label="Source2" />
                  <Edge From="14" To="16" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="17" To="22" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source2" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>0.5</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>NoGoTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT2S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NoGoImages</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Sink">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>Image</gl:ShaderName>
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>DrawImage</Name>
                    <Description>Draws an affine transformed 2D image.</Description>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedProperty">
                          <MemberName>Value</MemberName>
                          <Name>Angle</Name>
                          <Description>The angle of the image.</Description>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="bv:AngleProperty">
                            <bv:Value>0</bv:Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Angle" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="ExtentX" />
                          <Property Name="ExtentY" />
                          <Property Name="LocationX" />
                          <Property Name="LocationY" />
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Transform</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="X" DisplayName="LocationX" />
                                <Property Name="Y" DisplayName="LocationY" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:Translate">
                                  <gl:Order>Prepend</gl:Order>
                                  <gl:X>0</gl:X>
                                  <gl:Y>0</gl:Y>
                                  <gl:Z>0</gl:Z>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="X" DisplayName="ExtentX" />
                                <Property Name="Y" DisplayName="ExtentY" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:Scale">
                                  <gl:Order>Prepend</gl:Order>
                                  <gl:X>45</gl:X>
                                  <gl:Y>45</gl:Y>
                                  <gl:Z>1</gl:Z>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Angle" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:RotateZ">
                                  <gl:Order>Prepend</gl:Order>
                                  <gl:Angle>0</gl:Angle>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:UpdateUniform">
                                  <gl:UniformName>transform</gl:UniformName>
                                  <gl:ShaderName>Image</gl:ShaderName>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="2" Label="Source1" />
                              <Edge From="1" To="2" Label="Source2" />
                              <Edge From="2" To="4" Label="Source1" />
                              <Edge From="3" To="4" Label="Source2" />
                              <Edge From="4" To="6" Label="Source1" />
                              <Edge From="5" To="6" Label="Source2" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="ShiftX" />
                          <Property Name="ShiftY" />
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Shift</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="X" DisplayName="ShiftX" />
                                <Property Name="Y" DisplayName="ShiftY" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:CreateScale">
                                  <gl:X>0</gl:X>
                                  <gl:Y>0</gl:Y>
                                  <gl:Z>1</gl:Z>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>M11,M22</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:UpdateUniform">
                                  <gl:UniformName>shift</gl:UniformName>
                                  <gl:ShaderName>Image</gl:ShaderName>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="2" Label="Source1" />
                              <Edge From="1" To="2" Label="Source2" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:DrawMesh">
                            <gl:ShaderName>Image</gl:ShaderName>
                            <gl:MeshName>Quad</gl:MeshName>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="5" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="5" Label="Source3" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="7" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>NOGO</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Lick</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TimedGate">
                      <rx:TimeSpan>PT1S</rx:TimeSpan>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Amb" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="8" Label="Source2" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="20" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="18" Label="Source2" />
                  <Edge From="14" To="16" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source2" />
                  <Edge From="20" To="21" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="AsyncSubject">
              <Name>Random</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>results.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>None</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Lick</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>lick_times.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>drawTime.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Index</Selector>
      </Expression>
      <Expression xsi:type="Mod">
        <Operand xsi:type="IntProperty">
          <Value>60</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Divide">
        <Operand xsi:type="IntProperty">
          <Value>30</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ColorR" />
          <Property Name="ColorG" />
          <Property Name="ColorB" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
        <ExtentX>10</ExtentX>
        <ExtentY>10</ExtentY>
        <LocationX>45</LocationX>
        <LocationY>27</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
        <ColorR>0</ColorR>
        <ColorG>0</ColorG>
        <ColorB>0</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:DigitalOutput">
          <mx:Channels>
            <mx:DigitalOutputChannelConfiguration>
              <mx:ChannelName>DigitalOut</mx:ChannelName>
              <mx:Grouping>OneChannelForEachLine</mx:Grouping>
              <mx:Lines>Dev1/port1/line7</mx:Lines>
            </mx:DigitalOutputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Mod">
        <Operand xsi:type="IntProperty">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:DigitalOutput">
          <mx:Channels>
            <mx:DigitalOutputChannelConfiguration>
              <mx:ChannelName>DigitalOut</mx:ChannelName>
              <mx:Grouping>OneChannelForEachLine</mx:Grouping>
              <mx:Lines>Dev1/port1/line4</mx:Lines>
            </mx:DigitalOutputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalInput">
          <ard:PortName>COM3</ard:PortName>
          <ard:Pin>2</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:DigitalOutput">
          <mx:Channels>
            <mx:DigitalOutputChannelConfiguration>
              <mx:ChannelName>DigitalOut</mx:ChannelName>
              <mx:Grouping>OneChannelForEachLine</mx:Grouping>
              <mx:Lines>Dev1/port1/line5</mx:Lines>
            </mx:DigitalOutputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:AnalogInput">
          <mx:SignalSource />
          <mx:SampleRate>120</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>1000</mx:BufferSize>
          <mx:SamplesPerRead>120</mx:SamplesPerRead>
          <mx:Channels>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName />
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev0/ai2</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Rse</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>analog_enc.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>Data,ElementType</io:Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="10" To="15" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="31" To="38" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="34" To="41" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="36" To="39" Label="Source1" />
      <Edge From="37" To="38" Label="Source2" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>