<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-1</Left>
        <Right>1</Right>
        <Bottom>-1</Bottom>
        <Top>1</Top>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="PropertySource" TypeArguments="dsp:SelectChannels,sys:Int32[]">
        <MemberName>Channels</MemberName>
        <Value>
          <int>1</int>
          <int>2</int>
          <int>3</int>
          <int>4</int>
          <int>6</int>
          <int>8</int>
          <int>12</int>
          <int>16</int>
          <int>24</int>
          <int>32</int>
          <int>48</int>
          <int>64</int>
        </Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:First" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>DrawGrid</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="GridSize" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:GaborGrid">
                      <p1:GridSize>64</p1:GridSize>
                      <p1:SpatialFrequency>2</p1:SpatialFrequency>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SelectMany">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="InputMapping">
                          <PropertyMappings>
                            <Property Name="LocationX" Selector="Item2.X" />
                            <Property Name="LocationY" Selector="Item2.Y" />
                            <Property Name="ExtentX" Selector="Item2.Size" />
                            <Property Name="ExtentY" Selector="Item2.Size" />
                            <Property Name="SpatialFrequency" Selector="Item2.SpatialFrequency" />
                          </PropertyMappings>
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                          <LocationX>0.984375</LocationX>
                          <LocationY>0.984375</LocationY>
                          <Layer>0</Layer>
                          <Angle>0</Angle>
                          <SpatialFrequency>128</SpatialFrequency>
                          <TemporalFrequency>1</TemporalFrequency>
                          <Phase>0</Phase>
                          <SquareWave>false</SquareWave>
                          <Contrast>1</Contrast>
                          <DutyCycle xsi:nil="true" />
                          <Radius>1</Radius>
                          <Aperture>0</Aperture>
                          <Opacity>1</Opacity>
                          <ExtentX>0.03125</ExtentX>
                          <ExtentY>0.03125</ExtentY>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Timer">
                            <gl:DueTime>PT3S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source2" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="6" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ElementIndex" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
1 - Index % 2 as Color,
Value as Viewport)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" Selector="Color" />
                      <Property Name="ColorG" Selector="Color" />
                      <Property Name="ColorB" Selector="Color" />
                    </PropertyMappings>
                    <Selector>Viewport</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>0.2</ExtentX>
                    <ExtentY>0.2</ExtentY>
                    <LocationX>0.9</LocationX>
                    <LocationY>0.9</LocationY>
                    <Layer>1</Layer>
                    <Angle>0</Angle>
                    <ColorR>1</ColorR>
                    <ColorG>1</ColorG>
                    <ColorB>1</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT2S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Index</Selector>
      </Expression>
      <Expression xsi:type="Mod">
        <Operand xsi:type="IntProperty">
          <Value>60</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Divide">
        <Operand xsi:type="IntProperty">
          <Value>30</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:DigitalOutput">
          <mx:Channels>
            <mx:DigitalOutputChannelConfiguration>
              <mx:ChannelName>DigitalOut</mx:ChannelName>
              <mx:Grouping>OneChannelForEachLine</mx:Grouping>
              <mx:Lines>Dev1/port1/line7</mx:Lines>
            </mx:DigitalOutputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Mod">
        <Operand xsi:type="IntProperty">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:DigitalOutput">
          <mx:Channels>
            <mx:DigitalOutputChannelConfiguration>
              <mx:ChannelName>DigitalOut</mx:ChannelName>
              <mx:Grouping>OneChannelForEachLine</mx:Grouping>
              <mx:Lines>Dev1/port1/line4</mx:Lines>
            </mx:DigitalOutputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="14" To="19" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>