<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:MPE;assembly=MPEBonsai"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:DigitalOutput">
          <mx:Channels>
            <mx:DigitalOutputChannelConfiguration>
              <mx:ChannelName>DigitalOut</mx:ChannelName>
              <mx:Grouping>OneChannelForEachLine</mx:Grouping>
              <mx:Lines> Dev1/port1/line5</mx:Lines>
            </mx:DigitalOutputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Catch" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Configuration" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Reward.calibration_slope</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Water Volume (mL)" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Divide">
        <Operand xsi:type="FloatProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Reward.calibration_intercept</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="FloatProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DueTime" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Delay">
          <gl:DueTime>PT0S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:DigitalOutput">
          <mx:Channels>
            <mx:DigitalOutputChannelConfiguration>
              <mx:ChannelName>DigitalOut</mx:ChannelName>
              <mx:Grouping>OneChannelForEachLine</mx:Grouping>
              <mx:Lines>Dev1/port1/line5</mx:Lines>
            </mx:DigitalOutputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Catch" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="3" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="14" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="10" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="15" To="17" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>