<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-180</Left>
        <Right>180</Right>
        <Bottom>-90</Bottom>
        <Top>90</Top>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
        <FaceSize xsi:nil="true" />
        <ClearColor>Gray</ClearColor>
        <Width xsi:nil="true" />
        <Height xsi:nil="true" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
        <Width>20</Width>
        <Height>15</Height>
        <Rotation>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>0</X>
          <Y>0</Y>
          <Z>-10</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.GammaCorrection.bonsai">
          <ClearColor>Gray</ClearColor>
          <GammaLut xsi:nil="true" />
        </Builder>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>