<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>Saving Dir</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Bin FileName</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ActiveQuads" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Collections.SparseNoise.bonsai">
        <Duration>PT0.5S</Duration>
        <ActiveQuads>1</ActiveQuads>
        <GridSize>
          <Width>28</Width>
          <Height>16</Height>
        </GridSize>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>E:\bonsai_data\SparseNoise_Log_.bin</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Sink">
        <Name>TriggerSyncQuad</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Index</Selector>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Mod">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Sync</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MulticastSubject">
              <Name>RepCounter</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateTexture">
          <gl:TextureName>DynamicVideo</gl:TextureName>
          <gl:TextureTarget>Texture2D</gl:TextureTarget>
          <gl:InternalFormat>Rgba</gl:InternalFormat>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="8" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>