<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialize Allen resources</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>640</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Black</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>Primary</gl:DisplayDevice>
                <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Set up Allen screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-180</Left>
              <Right>180</Right>
              <Bottom>-90</Bottom>
              <Top>90</Top>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
              <FaceSize xsi:nil="true" />
              <ClearColor>Gray</ClearColor>
              <Width xsi:nil="true" />
              <Height xsi:nil="true" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>-10</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.GammaCorrection.bonsai">
                <ClearColor>Gray</ClearColor>
                <GammaLut xsi:nil="true" />
              </Builder>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Set up screen photodiode</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Index</Selector>
            </Expression>
            <Expression xsi:type="Mod">
              <Operand xsi:type="IntProperty">
                <Value>60</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="IntProperty">
                <Value>30</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorR" />
                <Property Name="ColorG" />
                <Property Name="ColorB" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>10</ExtentX>
              <ExtentY>10</ExtentY>
              <LocationX>45</LocationX>
              <LocationY>27</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>1</ColorR>
              <ColorG>1</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Mod">
                <Operand xsi:type="IntProperty">
                  <Value>2</Value>
                </Operand>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GreaterThan">
                <Operand xsi:type="IntProperty">
                  <Value>0</Value>
                </Operand>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="mx:DigitalOutput">
                  <mx:Channels>
                    <mx:DigitalOutputChannelConfiguration>
                      <mx:ChannelName>DigitalOut</mx:ChannelName>
                      <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                      <mx:Lines>Dev1/port1/line4</mx:Lines>
                    </mx:DigitalOutputChannelConfiguration>
                  </mx:Channels>
                </Combinator>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Custom behavior code</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Index</Selector>
            </Expression>
            <Expression xsi:type="Mod">
              <Operand xsi:type="IntProperty">
                <Value>60</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="IntProperty">
                <Value>30</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorR" />
                <Property Name="ColorG" />
                <Property Name="ColorB" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>10</ExtentX>
              <ExtentY>10</ExtentY>
              <LocationX>-45</LocationX>
              <LocationY>27</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>1</ColorR>
              <ColorG>1</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Mod">
                <Operand xsi:type="IntProperty">
                  <Value>2</Value>
                </Operand>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GreaterThan">
                <Operand xsi:type="IntProperty">
                  <Value>0</Value>
                </Operand>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="mx:DigitalOutput">
                  <mx:Channels>
                    <mx:DigitalOutputChannelConfiguration>
                      <mx:ChannelName>DigitalOut</mx:ChannelName>
                      <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                      <mx:Lines>Dev1/port1/line4</mx:Lines>
                    </mx:DigitalOutputChannelConfiguration>
                  </mx:Channels>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>None</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalInput">
                <ard:PortName>COM3</ard:PortName>
                <ard:Pin>2</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Lick</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="mx:DigitalOutput">
                  <mx:Channels>
                    <mx:DigitalOutputChannelConfiguration>
                      <mx:ChannelName>DigitalOut</mx:ChannelName>
                      <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                      <mx:Lines> Dev1/port1/line5</mx:Lines>
                    </mx:DigitalOutputChannelConfiguration>
                  </mx:Channels>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.02S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="mx:DigitalOutput">
                  <mx:Channels>
                    <mx:DigitalOutputChannelConfiguration>
                      <mx:ChannelName>DigitalOut</mx:ChannelName>
                      <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                      <mx:Lines>Dev1/port1/line5</mx:Lines>
                    </mx:DigitalOutputChannelConfiguration>
                  </mx:Channels>
                </Combinator>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Saving data to Allen storage</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="mx:AnalogInput">
                  <mx:SignalSource />
                  <mx:SampleRate>120</mx:SampleRate>
                  <mx:ActiveEdge>Rising</mx:ActiveEdge>
                  <mx:SampleMode>ContinuousSamples</mx:SampleMode>
                  <mx:BufferSize>1000</mx:BufferSize>
                  <mx:SamplesPerRead>120</mx:SamplesPerRead>
                  <mx:Channels>
                    <mx:AnalogInputChannelConfiguration>
                      <mx:ChannelName />
                      <mx:MinimumValue>-10</mx:MinimumValue>
                      <mx:MaximumValue>10</mx:MaximumValue>
                      <mx:PhysicalChannel>Dev0/ai2</mx:PhysicalChannel>
                      <mx:TerminalConfiguration>Rse</mx:TerminalConfiguration>
                      <mx:VoltageUnits>Volts</mx:VoltageUnits>
                    </mx:AnalogInputChannelConfiguration>
                  </mx:Channels>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="io:CsvWriter">
                <io:FileName>analog_enc.csv</io:FileName>
                <io:Append>false</io:Append>
                <io:Overwrite>false</io:Overwrite>
                <io:Suffix>Timestamp</io:Suffix>
                <io:IncludeHeader>false</io:IncludeHeader>
                <io:Selector>Data,ElementType</io:Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>